PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 900
      stopVal [duration (s)] = 5
      useWindowParams = True
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    TextComponent text
      color [set every repeat] = $textColor
      letterHeight = 0.10
      startVal [time (s)] = 0
      text [set every repeat] = $stim1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.15
      storeCorrect = True
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  Routine welcome
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press RIGHT arrow key for inconsistent prompts, e.g. yellow pops up with color green.
        Press LEFT arrow key for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in <insert total time>!

        Press SPACE key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    RoutineSettingsComponent thanks
      stopVal [duration (s)] = 30
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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Flow
  Routine welcome
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = trial_file_146820_20250124_041047_UTC.xlsx
    loopType = random
    nReps = 36
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    conditions:
      [{'type': 'test', 'condition1': 'inconsistent', 'trialNo': 1, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'green', 'textColor': 'black', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 7, 'stim1': 'purple', 'textColor': 'red', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'yellow', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'right', 'ITI': 800, 'presTime': 2000}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
    Routine trial
  LoopTerminator stroop
  Routine thanks
